/*** ^^A -*-C++-*- **********************************************/
/*	zgp		          			*/
/****************************************************************/
/*	Short Description :					*/
/*	Performs parahydrogen polarization experiment	*/
/*      Set the polariser field value from CNST31               */
/****************************************************************/
/*	Keywords :						*/
/*	parahydrogen					*/
/****************************************************************/
/*	Description/Usage :					*/
/*	This AU program performs one parahydrogen polarization */
/*     experiment*/
/*  The polariser field value for the polariser is set      */
/*      from pulse program constant name ex. CNST31 prior to    */
/*	execution of the experiment.       			*/
/*	Thhe magnetic field of the parahydrogen polariser will  */
/*      be set by polarize command: #H1:GA=value		*/
/****************************************************************/
/*	Author(s) :						*/
/*	Name		: Haifeng Zeng			*/
/*	Organisation	: JHMI			*/
/*	Email		: hzeng6@jhmi.edu*/
/****************************************************************/
/*	Name		Date	Modification:			*/
/*  hz  		Aug-14-2012  created 			*/
/****************************************************************/
/*
$Id: multizg_ph_b0,v 1.2 2012/03/13 13:27:27 hb Exp $
*/
#define IN_MIXING_CHAMBER 2
AUERR = runpol(curdat, cmd);
QUIT
int DEBUG=1;
#include <inc/hz_polarize>

int runpol(const char* curdat, const char* cmd)
{
    char *envpnt, polStatus[64], message[1024], optns[32];
    int zgsafety, intPolStatus, nargs;
    
    nargs = sscanf(cmd, "%s", &optns);
    if (nargs == 0)
        sprintf(optns, "");

    envpnt = getenv("UXNMR_SAFETY");
    zgsafety = 0;
    if (envpnt != NULL)
    {
        if (strcasecmp(envpnt, "on") == 0)
        {
            zgsafety = 1;
            CPR_exec("env set UXNMR_SAFETY=off", WAIT_TERM);
        }
    }

    intPolStatus = readPolStatus(40, polStatus);
    /*printf("%i", intPolStatus);/**/
    SETCURDATA
    if (intPolStatus == IN_MIXING_CHAMBER)
    {
    	setPolPar(curdat, cmd);
    	if (strcasecmp(optns, "NR") == 0)
    	    {STOREPAR("ZGOPTNS", "-DPOLNR")}
    	else
    	    {STOREPAR("ZGOPTNS", "-DPOL")}
    	ZG
    	STOREPAR("ZGOPTNS", "")
    	XAU("polcmd_nopopt", "sendline md3 a")
    }
    else
    {
    	sprintf(message, "The polarization experiment can not be performed because the status of the polarizer is <%s>", polStatus);
    	Proc_err(DEF_ERR_OPT, message);
    }

    printf("\nsomething");
    if (zgsafety == 1)
    CPR_exec("env set UXNMR_SAFETY=on", WAIT_TERM);

    return 0;
}

